CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_w(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_z(?P<Zdim>[0-9])_t(?P<Tdim>[0-9])_c(?P<Channel>.*)_u(?P<u>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "RFP")
    Name to assign these images:Cytplasm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:6|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:Grayscale
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Cytplasm
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Cytoplasm
    Name the output image:CytoplasmImage
    Select the color format:Grayscale
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:CytoplasmImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cytplasm
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
